<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>COM15</io:Name>
          <io:PortName>COM10</io:PortName>
          <io:BaudRate>57600</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>false</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>305</cv:X>
            <cv:Y>6</cv:Y>
            <cv:Width>28</cv:Width>
            <cv:Height>465</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>60</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:MorphologicalOperator">
          <cv:Size>
            <cv:Width>5</cv:Width>
            <cv:Height>5</cv:Height>
          </cv:Size>
          <cv:Anchor>
            <cv:X>-1</cv:X>
            <cv:Y>-1</cv:Y>
          </cv:Anchor>
          <cv:Shape>Ellipse</cv:Shape>
          <cv:Iterations>1</cv:Iterations>
          <cv:Operation>Dilate</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>ConnectedComponent</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>100</cv:MinArea>
          <cv:MaxArea>1500</cv:MaxArea>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="FloatProperty">
          <Value>450</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM15</io:PortName>
          <io:NewLine />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\valeg\Desktop\Video\test2.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\valeg\Desktop\Video\test2.csv</io:FileName>
        <io:ListSeparator>\n</io:ListSeparator>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>COM15</io:PortName>
          <io:NewLine>\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:TextWriter">
          <io:FileName>C:\Users\valeg\Desktop\Video\ToneBehav</io:FileName>
          <io:Suffix>Timestamp</io:Suffix>
          <io:Buffered>true</io:Buffered>
          <io:Overwrite>false</io:Overwrite>
          <io:Append>true</io:Append>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\valeg\Desktop\Video\front.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\valeg\Desktop\Video\front.csv</io:FileName>
        <io:ListSeparator>\n</io:ListSeparator>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="13" Label="Source1" />
      <Edge From="2" To="14" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>