<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>266</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>50</cv:Width>
            <cv:Height>480</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\valeg\Desktop\Video\test2.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\valeg\Desktop\Video\test2.csv</io:FileName>
        <io:ListSeparator>\n</io:ListSeparator>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>