<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>24054192</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.FrameID</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\RWJNESTWR319D01-GEN\Documents\Videos\Top.csv</io:FileName>
        <io:ListSeparator>\n</io:ListSeparator>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Transpose" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Vertical</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\RWJNESTWR319D01-GEN\Documents\Videos\Top.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>170</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:Name />
          <port:PortName>COM6</port:PortName>
          <port:BaudRate>57600</port:BaudRate>
          <port:NewLine>\r\n</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>None</port:Handshake>
          <port:DiscardNull>false</port:DiscardNull>
          <port:DtrEnable>false</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>4096</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialReadLine">
          <port:PortName>COM6</port:PortName>
          <port:NewLine>\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\RWJNESTWR319D01-GEN\Documents\Videos\MazeBehavior.txt</io:FileName>
        <io:ListSeparator>\n</io:ListSeparator>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Up</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>"START"</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>COM6</port:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression> " "</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>COM6</port:PortName>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="0" To="6" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>