<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>300</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>30</cv:Width>
            <cv:Height>480</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\valeg\Desktop\Video\top.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\valeg\Desktop\Video\top.csv</io:FileName>
        <io:ListSeparator>\n</io:ListSeparator>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\valeg\Desktop\Video\front.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\valeg\Desktop\Video\front.csv</io:FileName>
        <io:ListSeparator>\n</io:ListSeparator>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>COM15</io:Name>
          <io:PortName>COM10</io:PortName>
          <io:BaudRate>57600</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>false</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>COM15</io:PortName>
          <io:NewLine>\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:TextWriter">
          <io:FileName>C:\Users\valeg\Desktop\Video\PatchBehav</io:FileName>
          <io:Suffix>Timestamp</io:Suffix>
          <io:Buffered>true</io:Buffered>
          <io:Overwrite>false</io:Overwrite>
          <io:Append>true</io:Append>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>