<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>24054192</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.FrameID</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\RWJNESTWR329D02-GEN\Documents\Videos\Top.csv</io:FileName>
        <io:ListSeparator>\n</io:ListSeparator>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Transpose" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Vertical</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\RWJNESTWR329D02-GEN\Documents\Videos\Top.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>170</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LoadImage">
          <cv:FileName>C:\Users\RWJNESTWR329D02-GEN\Documents\Arduino\backGround.bmp</cv:FileName>
          <cv:Mode>Grayscale</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Transpose" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Vertical</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:AbsoluteDifference" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>110</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:MorphologicalOperator">
          <cv:Size>
            <cv:Width>5</cv:Width>
            <cv:Height>5</cv:Height>
          </cv:Size>
          <cv:Anchor>
            <cv:X>-1</cv:X>
            <cv:Y>-1</cv:Y>
          </cv:Anchor>
          <cv:Shape>Ellipse</cv:Shape>
          <cv:Iterations>1</cv:Iterations>
          <cv:Operation>Dilate</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>ConnectedComponent</cv:Mode>
          <cv:Method>ChainApproxSimple</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>150</cv:MinArea>
          <cv:MaxArea>3000</cv:MaxArea>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it-308</scr:Expression>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it-326</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Math.Sqrt(it.Item1 * it.Item1 + it.Item2 * it.Item2)</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Math.Atan2(it.Item2, it.Item1)</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>(it * 180.0 / Math.PI + 360.0) % 360.0</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>(Math.Floor(((((13.0 - it + 360.0) % 360.0) + 22.5) / 45.0)) % 8) + 1</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.Item1 &lt; 36 ? 0 : it.Item2</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.Item1 &lt; 36 ? 0.0 :
Math.Max(0.0, Math.Min(1.0,
(it.Item1 - 36.0) /
(
  (it.Item2 == 1 ? 293.0 :
   it.Item2 == 2 ? 287.0 :
   it.Item2 == 3 ? 283.0 :
   it.Item2 == 4 ? 266.0 :
   it.Item2 == 5 ? 250.0 :
   it.Item2 == 6 ? 253.0 :
   it.Item2 == 7 ? 264.0 :
                   286.0)
  - 36.0
)
))</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Math.Round(it * 120.0)</scr:Expression>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}</Format>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>COM5</port:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:Name />
          <port:PortName>COM5</port:PortName>
          <port:BaudRate>115200</port:BaudRate>
          <port:NewLine>\r\n</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>None</port:Handshake>
          <port:DiscardNull>false</port:DiscardNull>
          <port:DtrEnable>false</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>4096</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:Name>MazeArduino</port:Name>
          <port:PortName>COM4</port:PortName>
          <port:BaudRate>115200</port:BaudRate>
          <port:NewLine>\r\n</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>None</port:Handshake>
          <port:DiscardNull>false</port:DiscardNull>
          <port:DtrEnable>false</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>4096</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="0" To="6" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="13" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="20" To="23" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="25" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="26" To="30" Label="Source1" />
      <Edge From="26" To="32" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>